PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine thanks
    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = thanks
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  Routine testeB_image
    ImageComponent testeB_image_1
      image = imagens/place/city.jpg
      pos = (0, 0.3)
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent testeB_image_2
      image = imagens/object/ball.png
      pos = (-0.7, -0.38)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent testeB_image_3
      image = imagens/object/bear.png
      pos = (-0.45, -0.38)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent testeB_mouse
      clickable = testeB_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent testeB_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Begin Experiment
        def movePicked(picked, mouse, grabbed):
            # Move piece if we already moving that piece
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                # Move newly clicked piece
                    if mouse.isPressedIn(piece) and grabbed is None:
                        return piece
      Begin Routine:
        # Begin Routine
        pieces = [testeB_image_2, testeB_image_3]
        picked = []
        movingPiece = None
        hideShow = False
      Each Frame:
        # Each Frame
        for piece in pieces:
            if testeB_mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, testeB_mouse, movingPiece)

        if (pieces[0].pos[1] > -0.09) & (pieces[1].pos[1] > -0.09):
            hideShow = True
    ImageComponent testeB_button
      image = imagens/button.png
      pos = (0.7, -0.38)
      size = (0.3, 0.07)
      startVal [condition] = hideShow
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  Routine testeB
    TextComponent testeB_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Teste B

        Esconder itens em qualquer lugar da cena.
        Lembre: Não deve esconder. Objetos no mesmo local

        Aperta 'espaço' para continuar
    KeyboardComponent testeB_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine testeC
    TextComponent testeC_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Teste C

        Esconder itens em qualquer lugar da cena.
        Lembre: Não deve esconder. Objetos no mesmo local

        Aperta 'espaço' para continuar
    KeyboardComponent testeC_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine testeC_image
    ImageComponent testeC_image_1
      image = imagens/place/florest.jpg
      pos = (0, 0.3)
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent testeC_image_2
      image = imagens/object/bear.png
      pos = (-0.7, -0.38)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent testeC_image_3
      image = imagens/object/hammer.png
      pos = (-0.45, -0.38)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent testeC_image_4
      image = imagens/object/hat.png
      pos = (-0.2, -0.38)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent testeC_image_5
      image = iimagens/object/book.png
      pos = (0.0, -0.38)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent testeC_mouse
      clickable = testeC_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent testeC_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Begin Experiment
        def movePicked(picked, mouse, grabbed):
            # Move piece if we already moving that piece
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                # Move newly clicked piece
                    if mouse.isPressedIn(piece) and grabbed is None:
                        return piece
      Begin Routine:
        # Begin Routine
        pieces = [testeC_image_2, testeC_image_3, testeC_image_4, testeC_image_5]
        picked = []
        movingPiece = None
        hideShow = False
      Each Frame:
        # Each Frame
        for piece in pieces:
            if testeC_mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, testeC_mouse, movingPiece)

        if (pieces[0].pos[1] > -0.09) & (pieces[1].pos[1] > -0.09) & (pieces[2].pos[1] > -0.09) & (pieces[3].pos[1] > -0.09):
            hideShow = True
    ImageComponent testeC_button
      image = imagens/button.png
      pos = (0.7, -0.38)
      size = (0.3, 0.07)
      startVal [condition] = hideShow
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  Routine testeD
    TextComponent testeD_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Teste D

        Esconder itens em qualquer lugar da cena.
        Lembre: Não deve esconder. Objetos no mesmo local

        Aperta 'espaço' para continuar
    KeyboardComponent testeD_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine testeD_image
    ImageComponent testeD_image_1
      image = imagens/place/house.jpg
      pos = (0, 0.3)
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent testeD_image_2
      image = imagens/object/bear.png
      pos = (-0.7, -0.38)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent testeD_image_3
      image = imagens/object/hammer.png
      pos = (-0.45, -0.38)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent testeD_image_4
      image = imagens/object/hat.png
      pos = (-0.2, -0.38)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent testeD_image_5
      image = imagens/object/book.png
      pos = (0.0, -0.38)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent testD_mouse
      clickable = testD_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent testD_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Begin Experiment
        def movePicked(picked, mouse, grabbed):
            # Move piece if we already moving that piece
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                # Move newly clicked piece
                    if mouse.isPressedIn(piece) and grabbed is None:
                        return piece
      Begin Routine:
        # Begin Routine
        pieces = [testeD_image_2, testeD_image_3, testeD_image_4, testeD_image_5]
        picked = []
        movingPiece = None
        hideShow = False
      Each Frame:
        # Each Frame
        for piece in pieces:
            if testD_mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, testD_mouse, movingPiece)

        if (pieces[0].pos[1] > -0.09) & (pieces[1].pos[1] > -0.09) & (pieces[2].pos[1] > -0.09) & (pieces[3].pos[1] > -0.09):
            hideShow = True
    ImageComponent testD_button
      image = imagens/button.png
      pos = (0.7, -0.38)
      size = (0.3, 0.07)
      startVal [condition] = hideShow
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  Routine testeE
    TextComponent testeE_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Teste E

        Esconder itens em qualquer lugar da cena.
        Lembre: Não deve esconder. Objetos no mesmo local

        Aperta 'espaço' para continuar
    KeyboardComponent testeE_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine testeA_image
    ImageComponent testeA_image_1
      image = imagens/place/castle.jpg
      pos = (0, 0.3)
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent testeA_image_2
      image = imagens/object/bear.png
      pos = (-0.7, -0.38)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent testeA_image_3
      image = imagens/object/ball.png
      pos = (-0.45, -0.38)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent testeA_mouse
      clickable = testeA_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent testA_code
      Code Type = Auto->JS
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      Begin Experiment:
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      Begin Routine:
        # Begin Routine
        pieces = [testeA_image_2, testeA_image_3]
        picked = []
        movingPiece = None
        hideShow = False
      Each Frame:
        # Each Frame
        for piece in pieces:
            if testeA_mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, testeA_mouse, movingPiece)

        if (pieces[0].pos[1] > -0.09) & (pieces[1].pos[1] > -0.09):
            hideShow = True
    ImageComponent testeA_button
      image = imagens/button.png
      pos = (0.7, -0.38)
      size = (0.3, 0.07)
      startVal [condition] = hideShow
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  Routine testeA
    TextComponent testeA_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Teste A

        Esconder itens em qualquer lugar da cena.
        Lembre: Não deve esconder. Objetos no mesmo local

        Aperta 'espaço' para continuar
    KeyboardComponent testeA_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine testeE_image
    ImageComponent testeE_image_1
      image = imagens/place/park.jpg
      pos = (0, 0.3)
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent testeE_image_2
      image = imagens/object/bear.png
      pos = (-0.8, -0.27)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeE_image_3
      image = imagens/object/book.png
      pos = (-0.8, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeE_image_4
      image = imagens/object/hammer.png
      pos = (-0.6, -0.27)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeE_image_5
      image = imagens/object/ball.png
      pos = (-0.6, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeE_image_6
      image = imagens/object/hat.png
      pos = (-0.4, -0.27)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeE_image_7
      image = imagens/object/lampshade.png
      pos = (-0.4, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeE_image_8
      image = imagens/object/magnifying_glass.png
      pos = (-0.2, -0.27)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeE_image_9
      image = imagens/object/pencil_holder.png
      pos = (-0.2, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeE_image_10
      image = imagens/object/shirt.png
      pos = (-0.0, -0.27)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeE_image_11
      image = imagens/object/spray_bottle.png
      pos = (-0.0, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeE_image_12
      image = imagens/object/stapler.png
      pos = (0.2, -0.27)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeE_image_13
      image = imagens/object/plane.png
      pos = (0.2, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent testeE_mouse
      clickable = testeE_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent testeE_code
      Code Type = Auto->JS
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      Begin Experiment:
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      Begin Routine:
        # Begin Routine
        pieces = [testeE_image_2, testeE_image_3, testeE_image_4, testeE_image_5, testeE_image_6, testeE_image_7, testeE_image_8, testeE_image_9, testeE_image_10, testeE_image_11, testeE_image_12, testeE_image_13]
        picked = []
        movingPiece = None
        hideShow = False
      Each Frame:
        # Each Frame
        for piece in pieces:
            if testeE_mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, testeE_mouse, movingPiece)

        if (pieces[0].pos[1] > -0.09) & (pieces[1].pos[1] > -0.09) & (pieces[2].pos[1] > -0.09) & (pieces[3].pos[1] > -0.09) & (pieces[4].pos[1] > -0.09) & (pieces[5].pos[1] > -0.09) & (pieces[6].pos[1] > -0.09) & (pieces[7].pos[1] > -0.09) & (pieces[8].pos[1] > -0.09) & (pieces[9].pos[1] > -0.09) & (pieces[10].pos[1] > -0.09) & (pieces[11].pos[1] > -0.09):
            hideShow = True
    ImageComponent testeE_button
      image = imagens/button.png
      pos = (0.7, -0.38)
      size = (0.3, 0.07)
      startVal [condition] = hideShow
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  Routine testeF
    TextComponent testeF_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Teste E

        Esconder itens em qualquer lugar da cena.
        Lembre: Não deve esconder. Objetos no mesmo local

        Aperta 'espaço' para continuar
    KeyboardComponent testeF_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine testeF_image
    ImageComponent testeF_image_1
      image = imagens/place/park_2.jpg
      pos = (0, 0.3)
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent testeF_image_2
      image = imagens/object/ball.png
      pos = (-0.8, -0.27)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeF_image_3
      image = imagens/object/bear.png
      pos = (-0.8, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeF_image_4
      image = imagens/object/book.png
      pos = (-0.6, -0.27)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeF_image_5
      image = imagens/object/hammer.png
      pos = (-0.6, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeF_image_6
      image = imagens/object/hat.png
      pos = (-0.4, -0.27)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeF_image_7
      image = imagens/object/lampshade.png
      pos = (-0.4, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeF_image_8
      image = imagens/object/magnifying_glass.png
      pos = (-0.2, -0.27)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeF_image_9
      image = imagens/object/pencil_holder.png
      pos = (-0.2, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeF_image_10
      image = imagens/object/plane.png
      pos = (-0.0, -0.27)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeF_image_11
      image = imagens/object/shirt.png
      pos = (-0.0, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeF_image_12
      image = imagens/object/spray_bottle.png
      pos = (0.2, -0.27)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent testeF_image_13
      image = imagens/object/stapler.png
      pos = (0.2, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent testeF_mouse
      clickable = testeF_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    CodeComponent testeF_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Begin Experiment
        def movePicked(picked, mouse, grabbed):
            # Move piece if we already moving that piece
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                # Move newly clicked piece
                    if mouse.isPressedIn(piece) and grabbed is None:
                        return piece
      Begin Routine:
        # Begin Routine
        pieces = [testeF_image_2,testeF_image_3,testeF_image_4,testeF_image_5,testeF_image_6,testeF_image_7,testeF_image_8,testeF_image_9,testeF_image_10,testeF_image_11,testeF_image_12,testeF_image_13]
        picked = []
        movingPiece = None
        hideShow = False
      Each Frame:
        # Each Frame
        for piece in pieces:
            if testeF_mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, testeF_mouse, movingPiece)

        if (pieces[0].pos[1] > -0.09) & (pieces[1].pos[1] > -0.09) & (pieces[2].pos[1] > -0.09) & (pieces[3].pos[1] > -0.09) & (pieces[4].pos[1] > -0.09) & (pieces[5].pos[1] > -0.09) & (pieces[6].pos[1] > -0.09) & (pieces[7].pos[1] > -0.09) & (pieces[8].pos[1] > -0.09) & (pieces[9].pos[1] > -0.09) & (pieces[10].pos[1] > -0.09) & (pieces[11].pos[1] > -0.09):
            hideShow = True
    ImageComponent testeF_button
      image = imagens/button.png
      pos = (0.7, -0.38)
      size = (0.3, 0.07)
      startVal [condition] = hideShow
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  Routine testeA_onde
    ImageComponent testeA_image_onde_1
      image = imagens/place/castle.jpg
      pos = (0, 0.3)
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent testeA_image_onde_2
      image = imagens/x.png
      pos = (0, -0.3)
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent teste_onde
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Você escondeu algum objeto nesse local ?
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    TextComponent treste_onde_s
      letterHeight = 0.05
      pos = (0.5, -0.35)
      startVal [time (s)] = 0.0
      text = Aperta 'S' para Sim.
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    TextComponent text_onde_n
      letterHeight = 0.05
      pos = (-0.5,-0.35)
      startVal [time (s)] = 0.0
      text = Aperta 'N' para Não.
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    CodeComponent code_onde
      Code Type = Auto->JS
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      Begin Experiment:
        # Begin Experiment
        # import random
        # pieces.pos = random.choice(lista)
      Begin Routine:
        # Begin Routine
        import random
        lista = [[0.0,0.0], [0.-1, 0.1], [0.2, 0.-2]]
        testeA_image_onde_2.pos = random.choice(lista)
        hideShow = False
    KeyboardComponent key_resp
      allowedKeys = 's','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrucoes_1
    TextComponent text_introcoes_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        POR GENTILEZA, LEIA COM MUITA ATENÇÃO AS INSTRUÇÕES A SEGUIR.

        Aperta 'espaço' para continuar.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introcoes_2
    TextComponent text_introducoes_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        PARA REALIZAR A TAREFA SEGUINTE, PROCURE UM LUGAR SEGURO E CONFORTÁVEL PARA PROSSEGUIR. POIS, NÃO SERÁ POSSÍVEL REINICIAR OU REFAZER A TAREFA.

        Aperta 'espaço' para continuar.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introducoes_3
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        VOCÊ DEVERÁ ESCONDER OS OBJETOS PELO CENÁRIO, OBEDECENDO ALGUMAS REGRAS:

        1- NÃO ESCONDA MAIS DE UM OBJETO NO MESMO LUGAR;
        2- EVITE GUARDAR OS OBJETOS NOS CANTOS DA TELA;

        Aperta 'espaço' para continuar.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine testeA
  Routine testeA_image
  Routine testeA_onde
  Routine testeA_onde
  Routine thanks
